OpenViBE-Scenario
Comment
  Configurable box

Start
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
-> SSVEP Training Controller => #1
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4 1 2 3 4 1 2 3 4
  Stimulation duration = 10
  Break duration = 4
  Flickering delay = 2.000000
Input stimulations 1=#1.Stimulations, Input stimulations 2=#1.New output -> Stimulation multiplexer => #2
#1.Stimulations -> Stimulation listener "Start&Stop"
  Log level to use = Information
#1.New output -> Stimulation listener "StimurationNumber"
  Log level to use = Information
#1.Stimulations -> UDP Sender
  Host = localhost
  Port = 5678
#1.New output -> UDP Sender
  Host = localhost
  Port = 5679
Acquisition client => #7
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#7.Experiment information, Input stream 2=#7.Signal stream, Input stream 3=#2 -> 0xc67a01dc (Raw signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]rawssvepsignal-record.ov
  Use compression = false
Data=#7.Signal stream, Stimulations=#2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
